Key	Value
CellProfiler_Version	4.2.4
ChannelType_A647	Grayscale
ChannelType_DAPI	Grayscale
ChannelType_YFP	Grayscale
ImageSet_Zip_Dictionary	b'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'
Metadata_Tags	"[""ImageNumber""]"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, youâx80x99ll need to specify the image type as âx80x98Color imageâx80x99 and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ""DAPI"")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ""YFP"")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ""A647"")
    Name to assign these images:A647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction using the Regular method and polynomial fitting to create a illumination correction function for the first image. ']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enabled:False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
    Select the input image:A647
    Name the output image:A647_correct
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Perform illumination correction using the Regular method and polynomial fitting to create a illumination correction function for the second image. ']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enabled:False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
    Select the input image:YFP
    Name the output image:YFP_correct
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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enabled:False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
    Select the input image:DAPI
    Name the output image:DAPI_correct
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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notes:['Apply the illumination function to the original images and examine the result.']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enabled:False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
    Select the input image:A647
    Name the output image:CorrectedA647
    Select the illumination function:A647_correct
    Select how the illumination function is applied:Divide
    Select the input image:A647
    Name the output image:CorrectedA647
    Select the illumination function:A647_correct
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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enabled:False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
    Select the input image:YFP
    Name the output image:CorrectedYPF
    Select the illumination function:YFP_correct
    Select how the illumination function is applied:Divide
    Select the input image:A647
    Name the output image:CorrectedA647
    Select the illumination function:A647_correct
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:10|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enabled:False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
    Select the input image:DAPI
    Name the output image:CorrectedDAPI
    Select the illumination function:DAPI_correct
    Select how the illumination function is applied:Divide
    Select the input image:A647
    Name the output image:CorrectedA647
    Select the illumination function:A647_correct
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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notes:['this is for our 60x image, the pixel range of nuclei is roughly 80~300', 'and threshhold 0.5 to isolate nuclei.', 'will need to change if using other resolution.', '', 'Similarly, correlation measurements for individual objects can also be obtained. However, to determine colocalization on per-object basis, the objects within the image must be identified.  We first segment the image features into objects, then make comparisons between the individual objects in the channels.', '', 'The input image is selected as Stain1, with the output objects named Objects1. The typical diameter is set as [3,15] for the min/max size we expect the objects to be. We chose to discard small and large objects, which tend to be spurious, and discard those objects at the border because we will be making area-based measurements.', '', 'The chosen thresholding method can greatly affect segmentation.  Here, you want to select a method that will accurately identify the protein of interest as foreground.  Depending on the background level and properties of the stain, you may need to try several different methods and corresponding settings to obtain good segmentation.  Please see the help for IdentifyPrimaryObjects for more information on the thresholding methods available.', '', 'Settings to distinguish clumped objects are of importance for per-object measures of co-localization.  For example, if you wish to measure co-localization only in the nuclei or cytoplasm, each sub cellular compartment must be properly segmented to provide an accurate measurement.  You may need to adjust various settings to get good segmentation of clumpy nuclei. ']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
    Select the input image:DAPI
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:A647, DAPI, YFP
    Select objects to measure:nuclei

MeasureObjectIntensityDistribution:[module_num:13|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
    Select images to measure:A647, DAPI, YFP
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:14|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
    Select images to measure:A647, DAPI, YFP
    Select objects to measure:nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:nuclei|AreaShape_EquivalentDiameter,nuclei|AreaShape_Zernike_7_5,nuclei|AreaShape_Zernike_7_7,nuclei|AreaShape_Zernike_7_1,nuclei|AreaShape_Zernike_7_3,nuclei|AreaShape_Zernike_2_0,nuclei|AreaShape_Zernike_2_2,nuclei|AreaShape_Zernike_9_7,nuclei|AreaShape_Zernike_9_1,nuclei|AreaShape_Zernike_9_3,nuclei|AreaShape_Zernike_9_9,nuclei|AreaShape_Zernike_9_5,nuclei|AreaShape_Zernike_1_1,nuclei|AreaShape_Zernike_5_1,nuclei|AreaShape_Zernike_5_5,nuclei|AreaShape_Zernike_5_3,nuclei|AreaShape_Zernike_8_2,nuclei|AreaShape_Zernike_8_4,nuclei|AreaShape_Zernike_8_0,nuclei|AreaShape_Zernike_8_8,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:intensityMeasurements
    Overwrite existing files without warning?:No
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:nucleiOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:nuclei

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:nucleiOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
"
Run_Timestamp	2023-06-16T15:31:06.957002
