CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, youâx80x99ll need to specify the image type as âx80x98Color imageâx80x99 and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "YFP")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "A647")
    Name to assign these images:A647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction using the Regular method and polynomial fitting to create a illumination correction function for the first image. ']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
    Select the input image:A647
    Name the output image:A647_correct
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Perform illumination correction using the Regular method and polynomial fitting to create a illumination correction function for the second image. ']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
    Select the input image:YFP
    Name the output image:YFP_correct
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:DAPI
    Name the output image:DAPI_correct
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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notes:['Apply the illumination function to the original images and examine the result.']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
    Select the input image:A647
    Name the output image:CorrectedA647
    Select the illumination function:A647_correct
    Select how the illumination function is applied:Divide
    Select the input image:A647
    Name the output image:CorrectedA647
    Select the illumination function:A647_correct
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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
    Select the input image:YFP
    Name the output image:CorrectedYPF
    Select the illumination function:YFP_correct
    Select how the illumination function is applied:Divide
    Select the input image:A647
    Name the output image:CorrectedA647
    Select the illumination function:A647_correct
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:10|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
    Select the input image:DAPI
    Name the output image:CorrectedDAPI
    Select the illumination function:DAPI_correct
    Select how the illumination function is applied:Divide
    Select the input image:A647
    Name the output image:CorrectedA647
    Select the illumination function:A647_correct
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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notes:['this is for our 60x image, the pixel range of nuclei is roughly 80~300', 'and threshhold 0.5 to isolate nuclei.', 'will need to change if using other resolution.', '', 'Similarly, correlation measurements for individual objects can also be obtained. However, to determine colocalization on per-object basis, the objects within the image must be identified.  We first segment the image features into objects, then make comparisons between the individual objects in the channels.', '', 'The input image is selected as Stain1, with the output objects named Objects1. The typical diameter is set as [3,15] for the min/max size we expect the objects to be. We chose to discard small and large objects, which tend to be spurious, and discard those objects at the border because we will be making area-based measurements.', '', 'The chosen thresholding method can greatly affect segmentation.  Here, you want to select a method that will accurately identify the protein of interest as foreground.  Depending on the background level and properties of the stain, you may need to try several different methods and corresponding settings to obtain good segmentation.  Please see the help for IdentifyPrimaryObjects for more information on the thresholding methods available.', '', 'Settings to distinguish clumped objects are of importance for per-object measures of co-localization.  For example, if you wish to measure co-localization only in the nuclei or cytoplasm, each sub cellular compartment must be properly segmented to provide an accurate measurement.  You may need to adjust various settings to get good segmentation of clumpy nuclei. ']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
    Select the input image:DAPI
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):16,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:CorrectedA647, CorrectedDAPI, CorrectedYPF
    Select objects to measure:nuclei

MeasureObjectIntensityDistribution:[module_num:13|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
    Select images to measure:CorrectedA647, CorrectedDAPI, CorrectedYPF
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:14|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
    Select images to measure:CorrectedA647, CorrectedDAPI, CorrectedYPF
    Select objects to measure:nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureColocalization:[module_num:15|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notes:['The Measure Correlation module measures both the correlation of Stain1 and Stain2 across the entire image.  The overall image correlation can give a general sense of how colocalized the features within the images are.', '', 'The correlation measurement is the normalized covariance (covariance divided by the product of standard deviation of pixels in each image). Correlation ranges from -1 (complete inverse correlation) to +1 (complete correlation). Thus, the closer to one the correlation measurement is, the more correlated the two images are and the higher the amount of colocalization.', '', 'Note that if you are not interested in object-based calculations, you could stop here and remove the modules up to the ExportToSpreadsheet module.']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
    Select images to measure:CorrectedA647, CorrectedYPF
    Set threshold as percentage of maximum intensity for the images:25
    Select where to measure correlation:Within objects
    Select objects to measure:nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Accurate

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:nuclei|Location_CenterMassIntensity_Y_CorrectedDAPI,nuclei|Location_CenterMassIntensity_Y_CorrectedA647,nuclei|Location_CenterMassIntensity_Y_CorrectedYPF,nuclei|Location_CenterMassIntensity_X_CorrectedA647,nuclei|Location_CenterMassIntensity_X_CorrectedDAPI,nuclei|Location_CenterMassIntensity_X_CorrectedYPF,nuclei|Location_CenterMassIntensity_Z_CorrectedDAPI,nuclei|Location_CenterMassIntensity_Z_CorrectedA647,nuclei|Location_CenterMassIntensity_Z_CorrectedYPF,nuclei|Location_Center_Z,nuclei|Location_Center_Y,nuclei|Location_Center_X,nuclei|Location_MaxIntensity_Y_CorrectedYPF,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:intensityMeasurements
    Overwrite existing files without warning?:No
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