Key	Value
CellProfiler_Version	4.2.4
ChannelType_DAPI	Grayscale
ChannelType_SON	Grayscale
ImageSet_Zip_Dictionary	b'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'
Metadata_Tags	"[""ImageNumber""]"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, youâx80x99ll need to specify the image type as âx80x98Color imageâx80x99 and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ""DAPI"")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ""YFP"")
    Name to assign these images:SON
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPIsmooth
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:Yes
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
Smooth:[module_num:6|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
    Select the input image:DAPIsmooth
    Name the output image:DAPIsmooth2
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:Yes
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
RescaleIntensity:[module_num:7|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
    Select the input image:DAPIsmooth2
    Name the output image:DAPIrescale
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceEdges:[module_num:8|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
    Select the input image:DAPIrescale
    Name the output image:DAPIedged
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    Select an edge-finding method:Kirsch
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
ImageMath:[module_num:9|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:DAPIedgeAdd
    Image or measurement?:Image
    Select the first image:DAPIrescale
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DAPIedged
    Multiply the second image by:1.0
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
Smooth:[module_num:10|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
    Select the input image:DAPIedgeAdd
    Name the output image:DAPIsmooth3
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:Yes
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
EnhanceOrSuppressFeatures:[module_num:11|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enabled:False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
    Select the input image:DAPIedged
    Name the output image:DAPIedgedEnhanced
    Select the operation:Enhance
    Feature size:150
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:12|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notes:['this is for our 60x image, the pixel range of nuclei is roughly 80~300', 'and threshhold 0.5 to isolate nuclei.', 'will need to change if using other resolution.', '', 'Similarly, correlation measurements for individual objects can also be obtained. However, to determine colocalization on per-object basis, the objects within the image must be identified.  We first segment the image features into objects, then make comparisons between the individual objects in the channels.', '', 'The input image is selected as Stain1, with the output objects named Objects1. The typical diameter is set as [3,15] for the min/max size we expect the objects to be. We chose to discard small and large objects, which tend to be spurious, and discard those objects at the border because we will be making area-based measurements.', '', 'The chosen thresholding method can greatly affect segmentation.  Here, you want to select a method that will accurately identify the protein of interest as foreground.  Depending on the background level and properties of the stain, you may need to try several different methods and corresponding settings to obtain good segmentation.  Please see the help for IdentifyPrimaryObjects for more information on the thresholding methods available.', '', 'Settings to distinguish clumped objects are of importance for per-object measures of co-localization.  For example, if you wish to measure co-localization only in the nuclei or cytoplasm, each sub cellular compartment must be properly segmented to provide an accurate measurement.  You may need to adjust various settings to get good segmentation of clumpy nuclei. ']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
    Select the input image:DAPIsmooth3
    Name the primary objects to be identified:temp
    Typical diameter of objects, in pixel units (Min,Max):100,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:1000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:2.5
    Lower and upper bounds on threshold:0.45,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
EditObjectsManually:[module_num:13|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
    Select the objects to be edited:temp
    Name the edited objects:nuclei
    Numbering of the edited objects:Retain
    Display a guiding image?:Yes
    Select the guiding image:DAPIsmooth3
    Allow overlapping objects?:No

ExpandOrShrinkObjects:[module_num:14|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enabled:False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
    Select the input objects:nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Expand objects until touching
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
EnhanceOrSuppressFeatures:[module_num:15|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enabled:False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
    Select the input image:SON
    Name the output image:SONenhanced
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:16|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
    Select the input image:SON
    Name the output image:SONMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:nuclei
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    Invert the mask?:No

MaskImage:[module_num:17|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
    Select the input image:DAPI
    Name the output image:DAPIMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:SONMasked
    Name the primary objects to be identified:SONspeckles
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:SONspeckles, nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:DAPI, SON
    Select objects to measure:SONspeckles, nuclei

MeasureObjectIntensityDistribution:[module_num:21|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
    Select images to measure:DAPI, SONMasked
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
CalculateMath:[module_num:22|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
    Name the output measurement:SONspeckleAreaOfNucleus
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:SONspeckles
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:nuclei
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureTexture:[module_num:23|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
    Select images to measure:DAPI, SON, SONMasked
    Select objects to measure:SONspeckles, nuclei
    Enter how many gray levels to measure the texture at:64
    Hidden:2
    Measure whole images or objects?:Objects
    Texture scale to measure:1
    Texture scale to measure:10

MeasureObjectOverlap:[module_num:24|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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:nuclei
    Select the objects to be tested for overlap against the ground truth:SONspeckles
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

RelateObjects:[module_num:25|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
    Parent objects:nuclei
    Child objects:SONspeckles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:Yes
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:Yes
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    Name the output image:SONoutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0000
    Select objects to display:SONspeckles
    Select outline color:#00FFFF
    Select objects to display:nuclei

OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:SONoutlinesOnDAPI
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0000
    Select objects to display:SONspeckles
    Select outline color:#00FFFF
    Select objects to display:nuclei

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:SONoutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SONoutlines
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:SONoutlinesOnDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SONoutlinesOnDAPI
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:31|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DAPIMasked
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_DAPImasked
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:SONMasked
    Select method for constructing file names:From image filename
    Select image name for file prefix:SON
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SONmasked
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_enhanced
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:34|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:SONMasked
    Select method for constructing file names:From image filename
    Select image name for file prefix:SON
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_enhanced
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
"
Run_Timestamp	2023-06-16T17:07:44.333091
